CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (extension does istif) (file does endwith ".npy")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Condition>.*)_T(?P<Time>\d{4})_XY(?P<XY>[0-9]{2})_(?P<loc>\d{5})_Z(?P<Z_slice>\d{3})_(?P<Channel>.*).tif
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:XY(?P<XY>[0-9]{2})_illum_func.npy
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain ".npy")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Blue': 'XY', 'Brightfield': 'XY', 'Overlay': 'XY', 'Red': 'XY', 'illum_func': 'XY'}, {'Blue': 'loc', 'Brightfield': 'loc', 'Overlay': 'loc', 'Red': 'loc', 'illum_func': None}, {'Blue': 'Time', 'Brightfield': 'Time', 'Overlay': 'Time', 'Red': 'Time', 'illum_func': None}, {'Blue': 'Z_slice', 'Brightfield': 'Z_slice', 'Overlay': 'Z_slice', 'Red': 'Z_slice', 'illum_func': None}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "CH1")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "CH3")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "Overlay")
    Name to assign these images:Overlay
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ".npy")
    Name to assign these images:illum_func
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    Select the image type:Illumination function
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    Select the rule criteria:and (metadata does Channel "CH4")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:Red
    Name the output image:CorrRed
    Select the illumination function:illum_func
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:6|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enabled:False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
    Select the input image:CorrRed
    Name the output image:RescaleIntensity
    Rescaling method:Divide by the image's maximum
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:CorrRed
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corrected
    Saved file format:tiff
    Output file location:Default Output Folder|/Users/ConradOakes/Desktop/Galloway_2021/corr_dir
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder|
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