CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:T(?P<time>\d{4})_(?P<channel>.*)stitched-0.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CH3")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "CH2")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH4")
    Name to assign these images:Phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:Red
    Name the output image:CropRed
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,4550
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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
    Select the input image:Green
    Name the output image:CropGreen
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,4550
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    Remove empty rows and columns?:All
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CropRed
    Name the primary objects to be identified:PreFilteredObjects
    Typical diameter of objects, in pixel units (Min,Max):7,65
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:7
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.65
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.065,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:240
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectNeighbors:[module_num:8|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enabled:False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
    Select objects to measure:PreFilteredObjects
    Select neighboring objects to measure:PreFilteredObjects
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:PreFilteredObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:PreFilteredObjects
    Name the output objects:IdentifyPrimaryObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.69
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:CropGreen, CropRed
    Select objects to measure:IdentifyPrimaryObjects

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjects|Location_MaxIntensity_Y_Red,IdentifyPrimaryObjects|Location_MaxIntensity_Z_Red,IdentifyPrimaryObjects|Location_MaxIntensity_X_Red,IdentifyPrimaryObjects|Location_MaxIntensity_X_Green,IdentifyPrimaryObjects|Location_CenterMassIntensity_Z_Red,IdentifyPrimaryObjects|Location_CenterMassIntensity_Z_Green,IdentifyPrimaryObjects|Location_CenterMassIntensity_Y_Red,IdentifyPrimaryObjects|Location_CenterMassIntensity_Y_Green,IdentifyPrimaryObjects|Location_CenterMassIntensity_X_Red,IdentifyPrimaryObjects|Location_CenterMassIntensity_X_Green,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cell_locations
    Overwrite existing files without warning?:Yes
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
MaskImage:[module_num:14|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enabled:False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
    Select the input image:Red
    Name the output image:MaskRed
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjects
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    Invert the mask?:No

ConvertObjectsToImage:[module_num:15|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enabled:False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
    Select the input objects:PreFilteredObjects
    Name the output image:Obj_Image
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:16|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notes:['']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Obj_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Objects
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:17|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enabled:False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
    Select the type of image to save:Mask
    Select the image to save:MaskRed
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Mask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
