CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Condition>.*)_T(?P<Time>\d{4})_XY(?P<XY>[0-9]{2})_\d{5}_Z(?P<Z_slice>\d{3})_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "CH1")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "CH3")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "Overlay")
    Name to assign these images:Overlay
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Red
    Name the output image:IllumRed
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:Red
    Name the output image:CorrRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:CorrRed
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corrected
    Saved file format:tiff
    Output file location:Default Output Folder|/Users/ConradOakes/Desktop/Galloway_2021/corr_dir
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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