CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:Yes
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Condition>.*)_T(?P<Time>\d{4})_XY(?P<XY>[0-9]{2})_\d{5}_Z(?P<Z_slice>\d{3})_(?P<Channel>.*).tif
    Regular expression to extract from folder name:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:None
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:[]
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (metadata does Channel "CH1")
    Name to assign these images:Blue
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (metadata does Channel "CH3")
    Name to assign these images:Red
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (metadata does Channel "Overlay")
    Name to assign these images:Overlay
    Name to assign these objects:Nucleus
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:None

CorrectIlluminationCalculate:[module_num:5|svn_version:'Unknown'|variable_revision_number:2|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Red
    Name the output image:IllumRed
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
    Dilation radius:1
    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
    Method to calculate smoothing filter size:Automatic
    Approximate object diameter:10
    Smoothing filter size:10
    Retain the averaged image?:No
    Name the averaged image:IllumBlueAvg
    Retain the dilated image?:No
    Name the dilated image:IllumBlueDilated
    Automatically calculate spline parameters?:Yes
    Background mode:auto
    Number of spline points:5
    Background threshold:2.0
    Image resampling factor:2.0
    Maximum number of iterations:40
    Residual value for convergence:0.001

SaveImages:[module_num:6|svn_version:'Unknown'|variable_revision_number:15|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:IllumRed
    Select method for constructing file names:Single name
    Select image name for file prefix:Red
    Enter single file name:XY\g<XY>_illum_func
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:illum_func
    Saved file format:npy
    Output file location:Default Output Folder|/Users/ConradOakes/Desktop/Galloway_2021/corr_dir
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Default Output Folder|
    How to save the series:T (Time)
