CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:T00(?P<time>\d{2})_(?P<channel>\w+)stitched-(?P<zstep>\d{1}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CH3")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Red
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.5
    Upper outlier fraction:0
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2
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
ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cell_locations
    Overwrite existing files without warning?:No
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